{
    "io": {
        "port": "fw",
        "period": 0.001,
        "footpedals": "io/sawRobotIO1394-MTML-foot-pedals.xml"
    },
    "arms": [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        },
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "37059"
        },
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "76673"
        },
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "81503"
        },
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "26782"
        }
    ],
    "psm-teleops": [
        {
            "mtm": "MTMR",
            "psm": "PSM1"
        }
    ],
    "ecm-teleop": {
	"mtm-left": "MTML",
	"mtm-right": "MTMR",
	"ecm": "ECM"
    }
}
